opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: mPOP
author: CMS - IASTATE
description: OT-2 version of Minimal ProteOmic sample Preparation (mPOP) from Slavov Lab (DOI:https://doi.org/10.1101/399774)
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
modules:
  temperatureModuleV2: {location: 7}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 9}
  Opentrons 96 Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 8}
  Opentrons 96 Tip Rack 20 µL (2): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 11}
  Opentrons 96 Tip Rack 20 µL (3): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 5}
  buffer rack: {definitionId: custom_beta/opentrons_24_tuberack_1500ul/1, location: 10}
  SC sample plate: {definitionId: custom_beta/thermofast_384_wellplate_40ul/1, location: temperatureModuleV2}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Trypsin solution: {description: 10ng/uL Gold Trypsin, 0.2U/uL benzonase, 166.67 mM TEAB, pH8.5, serialize: true}
ingredLocations:
  buffer rack:
    Trypsin solution {volume: 500}: D3
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 90
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseMessage: Block is heating, please wait
  pauseTemperature: 90
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Heating block is ready for your samples!
    Please put your plate and press "resume" button
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 10
  pauseMessage: Incubating plate, please wait
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 12
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Please put the plate back in liquid nitrogen and press "resume"
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 90
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseMessage: Re-heating module, please wait
  pauseTemperature: 90
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Block is ready for you! Please put the plate back and press "resume"
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 10
  pauseMessage: Second incubation running, please wait.
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 12
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Please spin-down plate, take it to the water sonicator and incubate 5 minutes. Then bring the plate back
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Please put Trypsin solution on position D3 of tube rack in slot 10 and press "resume"
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: buffer rack
  aspirate_wells: D3
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  dispense_labware: SC sample plate
  dispense_wells: A1-P1, A2-P2, A3-P3, A4-P4, A5-P5, A6-P6, A7-P7, A8-P8, A9-P9, A10-P10, A11-P11, A12-P12
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Please put the second tube of trypsin solution on position D3 of the tube rack in slot 10
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: buffer rack
  aspirate_wells: D3
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  dispense_labware: SC sample plate
  dispense_wells: A13-P13, A14-P14, A15-P15, A16-P16, A17-P17, A18-P18, A19-P19, A20-P20, A21-P21, A22-P22, A23-P23, A24-P24
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Enzyme solution added. Please seal the plate, shake, spin down and incubate at 37C for 3-4hours
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: false
labwareDefinitions:
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  custom_beta/opentrons_24_tuberack_1500ul/1:
    brand: {brand: Opentrons, brandId: []}
    metadata: {displayName: Opentrons 24 Tube Rack with Generic 1.5 mL, displayCategory: tubeRack, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.75, yDimension: 85.5, zDimension: 79.65}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: opentrons_24_tuberack_1500ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 38, totalLiquidVolume: 1500, shape: circular, diameter: 9.1, x: 18.21, y: 75.43, z: 41.65}
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  custom_beta/thermofast_384_wellplate_40ul/1:
    brand: {brand: Thermo-fast, brandId: [Thermo Scientific AB-1384]}
    metadata: {displayName: Thermo-fast 384 Well Plate 40 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 9.5}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: thermofast_384_wellplate_40ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 9.25, totalLiquidVolume: 40, shape: circular, diameter: 2.9, x: 12.13, y: 76.49, z: 0.25}
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commands:
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- temperatureModule/setTargetTemperature: {moduleId: temperatureModuleV2, celsius: 90}
- temperatureModule/waitForTemperature: {moduleId: temperatureModuleV2, celsius: 90}
- delay: {message: Heating block is ready for your samples!
    Please put your plate and press "resume" button, waitForResume: true}
- delay: {message: Incubating plate, please wait, seconds: 600}
- temperatureModule/setTargetTemperature: {moduleId: temperatureModuleV2, celsius: 12}
- delay: {message: Please put the plate back in liquid nitrogen and press "resume", waitForResume: true}
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