opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: SCoPE2 TMT labeling
author: CMS - IASTATE
description: TMT labeling for 384-well plates following SCoPE2 guidance (modified from Slavov Lab Nat. Protocols)
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
modules:
  magneticModuleV2: {location: 4}
  temperatureModuleV2: {location: 7}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 8}
  Sample_plate: {definitionId: custom_beta/twin.tec_384_wellplate_45ul/1, location: magneticModuleV2}
  Opentrons 96 Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 5}
  Opentrons 96 Tip Rack 20 µL (2): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 11}
  Opentrons 96 Tip Rack 20 µL (3): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 10}
  TMT-rack: {definitionId: custom_beta/fisherbrandconicalscrewcap_24_aluminumblock_2000ul/1, location: temperatureModuleV2}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - TMT solution: {description: 22mM TMT label in dry acetonitrile}
ingredLocations:
  TMT-rack:
    TMT solution {volume: 500}: D1
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 10
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 15
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: TMT-rack
  aspirate_wells: D1
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  dispense_labware: Sample_plate
  dispense_wells: A1-P1, A2-P2, A3-P3, A4-P4, A5-P5, A6-P6, A7-P7, A8-P8, A9-P9, A10-P10, A11-P11, A12-P12, A13-P13, A14-P14, A15-P15, A16-P16, A17-P17, A18-P18, A19-P19, A20-P20, A21-P21, A22-P22, A23-P23, A24-P24
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_touchTip_checkbox: true
  preWetTip: true
labwareDefinitions:
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  custom_beta/twin.tec_384_wellplate_45ul/1:
    brand: {brand: twin.tec, brandId: [Eppendorf 0030129547]}
    metadata: {displayName: Twin.tec 384 Well Plate 45 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 10.6}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: twin.tec_384_wellplate_45ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 9.9, totalLiquidVolume: 45, shape: circular, diameter: 2.4, x: 11.96, y: 76.22, z: 0.7}
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  custom_beta/fisherbrandconicalscrewcap_24_aluminumblock_2000ul/1:
    brand: {brand: Fisherbrand conical screw cap, brandId: [Fisher Scientific - 02-681-344]}
    metadata: {displayName: Fisherbrand Conical Screw Cap 24 Aluminum Block 2000 µL, displayCategory: aluminumBlock, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.75, yDimension: 85.5, zDimension: 48.3}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: fisherbrandconicalscrewcap_24_aluminumblock_2000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 42.9, totalLiquidVolume: 2000, shape: circular, diameter: 8.32, x: 20.75, y: 68.63, z: 5.4}
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commands:
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- temperatureModule/setTargetTemperature: {moduleId: temperatureModuleV2, celsius: 10}
- temperatureModule/waitForTemperature: {moduleId: temperatureModuleV2, celsius: 15}
- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL (1), wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 1, labwareId: TMT-rack, wellName: D1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 1, labwareId: TMT-rack, wellName: D1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- aspirate: {pipetteId: p20_single_gen2, volume: 1, labwareId: TMT-rack, wellName: D1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
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