opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: add water to wells
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
modules:
  temperatureModuleV2: {location: 7}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 5}
  liquids: {definitionId: custom_beta/opentrons_24_tuberack_1500ul/1, location: 10}
  SC sample plate: {definitionId: custom_beta/thermofast_384_wellplate_40ul/1, location: temperatureModuleV2}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - water
ingredLocations:
  liquids:
    water {volume: 1500}: D3
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 3
  path: multiDispense
  changeTip: once
  aspirate_labware: liquids
  aspirate_wells: D3
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  dispense_labware: SC sample plate
  dispense_wells: A1-P1, A2-P2, A3-P3, A4-P4, A5-P5, A6-P6, A7-P7, A8-P8, A9-P9, A10-P10, A11-P11, A12-P12, A13-P13, A14-P14, A15-P15, A16-P16, A17-P17, A18-P18, A19-P19, A20-P20, A21-P21, A22-P22, A23-P23, A24-P24
  dispense_touchTip_checkbox: true
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
  preWetTip: true
labwareDefinitions:
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  custom_beta/opentrons_24_tuberack_1500ul/1:
    brand: {brand: Opentrons, brandId: []}
    metadata: {displayName: Opentrons 24 Tube Rack with Generic 1.5 mL, displayCategory: tubeRack, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.75, yDimension: 85.5, zDimension: 79.65}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: opentrons_24_tuberack_1500ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 38, totalLiquidVolume: 1500, shape: circular, diameter: 9.1, x: 18.21, y: 75.43, z: 41.65}
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  custom_beta/thermofast_384_wellplate_40ul/1:
    brand: {brand: Thermo-fast, brandId: [Thermo Scientific AB-1384]}
    metadata: {displayName: Thermo-fast 384 Well Plate 40 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 9.5}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: thermofast_384_wellplate_40ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 9.25, totalLiquidVolume: 40, shape: circular, diameter: 2.9, x: 12.13, y: 76.49, z: 0.25}
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 19, labwareId: liquids, wellName: D3, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 3, labwareId: SC sample plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 3.78}
- touchTip: {pipetteId: p20_single_gen2, labwareId: SC sample plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 8.25}}}
- dispense: {pipetteId: p20_single_gen2, volume: 3, labwareId: SC sample plate, wellName: B1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 3.78}
- touchTip: {pipetteId: p20_single_gen2, labwareId: SC sample plate, wellName: B1, wellLocation: {origin: bottom, offset: {z: 8.25}}}
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