opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: SCoPE2 TMT labeling
author: CMS - IASTATE
description: TMT labeling for 384-well plates following SCoPE2 guidance (modified from Slavov Lab Nat. Protocols)
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
modules:
  magneticModuleV2: {location: 4}
  temperatureModuleV2: {location: 7}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 8}
  TMT rack: {definitionId: opentrons/opentrons_24_aluminumblock_generic_2ml_screwcap/2, location: temperatureModuleV2}
  Sample_plate: {definitionId: custom_beta/twin.tec_384_wellplate_45ul/1, location: magneticModuleV2}
  Opentrons 96 Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 5}
  Opentrons 96 Tip Rack 20 µL (2): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 11}
  Opentrons 96 Tip Rack 20 µL (3): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 10}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - TMT solution
ingredLocations:
  TMT rack:
    TMT solution {volume: 200}: D1
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 15
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 15
labwareDefinitions:
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  custom_beta/twin.tec_384_wellplate_45ul/1:
    brand: {brand: twin.tec, brandId: [Eppendorf 0030129547]}
    metadata: {displayName: Twin.tec 384 Well Plate 45 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 10.6}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: twin.tec_384_wellplate_45ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 9.9, totalLiquidVolume: 45, shape: circular, diameter: 2.4, x: 11.96, y: 76.22, z: 0.7}
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commands:
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- temperatureModule/setTargetTemperature: {moduleId: temperatureModuleV2, celsius: 15}
- temperatureModule/waitForTemperature: {moduleId: temperatureModuleV2, celsius: 15}
